/*  Macro for image inversion
 *  Author: Elisabeth Kugler 2020
 *  contact: kugler.elisabeth@gmail.com
 
BSD 3-Clause License

Copyright (c) [2020], [Elisabeth C. Kugler, The University of Sheffield, United Kingdom]
All rights reserved.

// Redistribution and use in source and binary forms, with or without modification, are permitted provided that the following conditions are met:
// 1. Redistributions of source code must retain the above copyright notice, this list of conditions and the following disclaimer.
// 2. Redistributions in binary form must reproduce the above copyright notice, this list of conditions and the following disclaimer in the documentation and/or other materials provided with the distribution.
// 3. Neither the name of the copyright holder nor the names of its contributors may be used to endorse or promote products derived from this software without specific prior written permission.
// THIS SOFTWARE IS PROVIDED BY THE COPYRIGHT HOLDERS AND CONTRIBUTORS "AS IS" AND ANY EXPRESS OR IMPLIED WARRANTIES, INCLUDING, BUT NOT LIMITED TO, THE IMPLIED WARRANTIES OF MERCHANTABILITY AND FITNESS FOR A PARTICULAR PURPOSE ARE DISCLAIMED. IN NO EVENT SHALL THE COPYRIGHT HOLDER OR CONTRIBUTORS BE LIABLE FOR ANY DIRECT, INDIRECT, INCIDENTAL, SPECIAL, EXEMPLARY, OR CONSEQUENTIAL DAMAGES (INCLUDING, BUT NOT LIMITED TO, PROCUREMENT OF SUBSTITUTE GOODS OR SERVICES; LOSS OF USE, DATA, OR PROFITS; OR BUSINESS INTERRUPTION) HOWEVER CAUSED AND ON ANY THEORY OF LIABILITY, WHETHER IN CONTRACT, STRICT LIABILITY, OR TORT (INCLUDING NEGLIGENCE OR OTHERWISE) ARISING IN ANY WAY OUT OF THE USE OF THIS SOFTWARE, EVEN IF ADVISED OF THE POSSIBILITY OF SUCH DAMAGE.

 */

// input and output path
path = getDirectory("Input Folder");
filelist = getFileList(path); 
OutDir = path + "/InvTiff/"; 
File.makeDirectory(OutDir);

setBackgroundColor(0, 0, 0);
setForegroundColor(255, 255, 255);

for (i=0; i< filelist.length; i++) {   
	if (endsWith(filelist[i], ".tif")) {
		open(filelist[i]);
		setThreshold(0, 119);
		run("Make Binary", "method=Otsu background=Dark black");
		run("Invert", "stack");
		run("NIfTI-1", "save=" + OutDir + filelist[i] + ".nii");
		saveAs("Tiff", OutDir + filelist[i]);
		}
 }
close();

showMessage("Macro is finished."); 